CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:Probabilities_(?P<probnum>\d)\.
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (extension does istif)
    Name to assign these images:DIC
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (extension does istif) (metadata does probnum "0")
    Name to assign these images:K562
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DIC
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:green
    Channel number:2
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    Image name:BF

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:K562
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):35,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:10.0
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:cells
    Name the output objects:ShrunkenCells
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
    Fill holes in objects so that all objects shrink to a single point?:No
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:cells
    Select the smaller identified objects:ShrunkenCells
    Name the tertiary objects to be identified:cellMembrane
    Shrink smaller object prior to subtraction?:No

MeasureImageIntensity:[module_num:9|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
    Select images to measure:green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:cellMembrane
    Calculate custom percentiles:No
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
OverlayObjects:[module_num:10|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
    Input:green
    Name the output image:OverlayObjects
    Objects:cellMembrane
    Opacity:0.3

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/lab/papers/protocad_Gil_Nadir/confocal/data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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